PsychoPy2experiment version="2023.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 864]
  expName = ResearchProposal_1
  keyboardBackend = ioHub
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Routines
  Routine Instruction_1
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    TextComponent text_4
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        In the next frame some word and image association will be displayed.

        Try to memorize as many pairs of words and images as possible.


        Press "Spacebar" to continue
    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Encoding
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    PolygonComponent fixation
      fillColor = white
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    ImageComponent image
      image [set every repeat] = $Pictures_mix_
      pos = (0, 0.1)
      size = (0.3, 0.3)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 5.0
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    TextComponent text
      letterHeight = 0.06
      pos = (0, -0.2)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 5.0
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      text [set every repeat]:
        $Old_words_
    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 1.0
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  Routine Break
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    TextComponent Instruction
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
      text = This is a break for 1 minute.  Count backwards from 60 to 0. 
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  Routine Instruction_2
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    TextComponent retrival_instruction
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        You will be presented with words expressing different emotions or neutral words. Your task will be to indicate, if you can remember having seen them, what was the emotion of the previously associated image.

        [D - disgust, E - erotic, N - neutral] or indicate that the word is new [x - new]

        Press "Spacebar" to continue
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Retrival
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    TextComponent text_2
      letterHeight = 0.06
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 8.0
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      text [set every repeat]:
        $New_words_
    TextComponent text_5
      letterHeight = 0.04
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 8.0
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      text:
        What type of was image associated with this word?
        [D - disgust, E - erotic, N - neutral, X - new]
    KeyboardComponent key_resp_2
      allowedKeys = 'd','e','n','x'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 8.0
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  Routine ThankYou
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    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.0
      text = Thank You for participating!
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Flow
  Routine Instruction_1
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = psychopyinfo.xlsx
    loopType = fullRandom
    nReps = 1
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    conditions:
      [{'Pictures_mix_': 'C:\\Semester_6\\UGRP Cognition\\emotion-ugrp-main\\DistAOne\\7030.jpg', 'Old_words_': 'lazy', 'New_words_': 'begger'},
      {'Pictures_mix_': 'C:\\Semester_6\\UGRP Cognition\\emotion-ugrp-main\\DistAOne\\7031.jpg', 'Old_words_': 'nun', 'New_words_': 'birthday'},
      {'Pictures_mix_': 'C:\\Semester_6\\UGRP Cognition\\emotion-ugrp-main\\DistAOne\\7032.jpg', 'Old_words_': 'quiet', 'New_words_': 'blackmail'},
      {'Pictures_mix_': 'C:\\Semester_6\\UGRP Cognition\\emotion-ugrp-main\\DistAOne\\7034.jpg', 'Old_words_': 'pillow', 'New_words_': 'blister'},
      {'Pictures_mix_': 'C:\\Semester_6\\UGRP Cognition\\emotion-ugrp-main\\DistAOne\\7036.jpg', 'Old_words_': 'sleep', 'New_words_': 'bunny'},
      {'Pictures_mix_': 'C:\\Semester_6\\UGRP Cognition\\emotion-ugrp-main\\DistAOne\\7040.jpg', 'Old_words_': 'seat', 'New_words_': 'cancer'},
      {'Pictures_mix_': 'C:\\Semester_6\\UGRP Cognition\\emotion-ugrp-main\\DistAOne\\7041.jpg', 'Old_words_': 'table', 'New_words_': 'cemetery'},
      {'Pictures_mix_': 'C:\\Semester_6\\UGRP Cognition\\emotion-ugrp-main\\DistAOne\\7050.jpg', 'Old_words_': 'subdued', 'New_words_': 'chaos'},
      {'Pictures_mix_': 'C:\\Semester_6\\UGRP Cognition\\emotion-ugrp-main\\DistAOne\\7052.jpg', 'Old_words_': 'curtains', 'New_words_': 'clumsy'},
      {'Pictures_mix_': 'C:\\Semester_6\\UGRP Cognition\\emotion-ugrp-main\\DistAOne\\7057.jpg', 'Old_words_': 'column', 'New_words_': 'consoled'}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
    Routine Encoding
  LoopTerminator trials
  Routine Break
  Routine Instruction_2
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = psychopyinfo2.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'New_words_': 'begger'},
      {'New_words_': 'birthday'},
      {'New_words_': 'blackmail'},
      {'New_words_': 'blister'},
      {'New_words_': 'bunny'},
      {'New_words_': 'cancer'},
      {'New_words_': 'cemetery'},
      {'New_words_': 'chaos'},
      {'New_words_': 'clumsy'},
      {'New_words_': 'consoled'},
      {'New_words_': 'dazzle'},
      {'New_words_': 'decorate'},
      {'New_words_': 'delight'},
      {'New_words_': 'dentist'},
      {'New_words_': 'dirt'},
      {'New_words_': 'discourage'},
      {'New_words_': 'divorce'},
      {'New_words_': 'dove'},
      {'New_words_': 'excellent'},
      {'New_words_': 'excuse'},
      {'New_words_': 'fabric'},
      {'New_words_': 'elegant'},
      {'New_words_': 'dream'},
      {'New_words_': 'gold'},
      {'New_words_': 'gossip'},
      {'New_words_': 'fish'},
      {'New_words_': 'fascinate'},
      {'New_words_': 'father'},
      {'New_words_': 'fantasy'},
      {'New_words_': 'freedom'},
      {'New_words_': 'handsome'},
      {'New_words_': 'hate'},
      {'New_words_': 'headache'},
      {'New_words_': 'health'},
      {'New_words_': 'heaven '},
      {'New_words_': 'holiday'},
      {'New_words_': 'home'},
      {'New_words_': 'hug'},
      {'New_words_': 'hostage'},
      {'New_words_': 'hospital'},
      {'New_words_': 'icebox'},
      {'New_words_': 'incentive'},
      {'New_words_': 'infant'},
      {'New_words_': 'jewel'},
      {'New_words_': 'building'},
      {'New_words_': 'table'},
      {'New_words_': 'nun'},
      {'New_words_': 'quiet'},
      {'New_words_': 'pillow'},
      {'New_words_': 'sleep'},
      {'New_words_': 'seat'},
      {'New_words_': 'table'},
      {'New_words_': 'subdued'},
      {'New_words_': 'curtains'},
      {'New_words_': 'column'},
      {'New_words_': 'computer'},
      {'New_words_': 'cord'},
      {'New_words_': 'cork'},
      {'New_words_': 'corner'},
      {'New_words_': 'corridor'},
      {'New_words_': 'cottage'}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
    Routine Retrival
  LoopTerminator trials_2
  Routine ThankYou
